#===============================================#
# Alpha fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_alpha/Quantity = "Fluence"
s:Sc/ExtWindowFluence_alpha/Component= "ExtWindow"
s:Sc/ExtWindowFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_alpha/OutputType = "CSV"
sv:Sc/ExtWindowFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/ExtWindowFluence_alpha/Ebins = 161
d:Sc/ExtWindowFluence_alpha/EBinMin =  10000 eV
d:Sc/ExtWindowFluence_alpha/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_alpha/Quantity = "Fluence"
s:Sc/PropellerFluence_alpha/Component= "Propeller"
s:Sc/PropellerFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_alpha/OutputType = "CSV"
sv:Sc/PropellerFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/PropellerFluence_alpha/Ebins = 161
d:Sc/PropellerFluence_alpha/EBinMin =  10000 eV
d:Sc/PropellerFluence_alpha/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_alpha/Quantity = "Fluence"
s:Sc/Collimator1Fluence_alpha/Component= "Collimator1"
s:Sc/Collimator1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_alpha/OutputType = "CSV"
sv:Sc/Collimator1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/Collimator1Fluence_alpha/Ebins = 161
d:Sc/Collimator1Fluence_alpha/EBinMin =  10000 eV
d:Sc/Collimator1Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_alpha/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Layer1Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Layer1Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Layer1Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_alpha/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring1Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring1Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring1Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_alpha/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring2Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring2Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring2Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_alpha/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring3Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring3Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring3Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_alpha/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring4Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring4Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring4Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_alpha/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring5Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring5Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring5Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_alpha/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring6Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring6Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring6Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_alpha/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Ring7Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Ring7Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Ring7Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_alpha/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Layer2Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Layer2Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Layer2Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_alpha/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber1Layer3Fluence_alpha/Ebins = 161
d:Sc/IonChamber1Layer3Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber1Layer3Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_alpha/Quantity = "Fluence"
s:Sc/Collimator2Fluence_alpha/Component= "Collimator2"
s:Sc/Collimator2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_alpha/OutputType = "CSV"
sv:Sc/Collimator2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/Collimator2Fluence_alpha/Ebins = 161
d:Sc/Collimator2Fluence_alpha/EBinMin =  10000 eV
d:Sc/Collimator2Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_alpha/Quantity = "Fluence"
s:Sc/Collimator3Fluence_alpha/Component= "Collimator3"
s:Sc/Collimator3Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_alpha/OutputType = "CSV"
sv:Sc/Collimator3Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/Collimator3Fluence_alpha/Ebins = 161
d:Sc/Collimator3Fluence_alpha/EBinMin =  10000 eV
d:Sc/Collimator3Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer1Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Layer1Fluence_alpha/Component= "IonChamber2/Layer1"
s:Sc/IonChamber2Layer1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer1Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Layer1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Layer1Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Layer1Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Layer1Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_alpha/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring1Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring1Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring1Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_alpha/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring2Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring2Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring2Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_alpha/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring3Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring3Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring3Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_alpha/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring4Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring4Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring4Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_alpha/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring5Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring5Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring5Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_alpha/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring6Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring6Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring6Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_alpha/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Ring7Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Ring7Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Ring7Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_alpha/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Layer2Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Layer2Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Layer2Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_alpha/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_alpha/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_alpha/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/IonChamber2Layer3Fluence_alpha/Ebins = 161
d:Sc/IonChamber2Layer3Fluence_alpha/EBinMin =  10000 eV
d:Sc/IonChamber2Layer3Fluence_alpha/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_alpha/Quantity = "Fluence"
s:Sc/PatientShieldFluence_alpha/Component= "PatientShield"
s:Sc/PatientShieldFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_alpha/OutputType = "CSV"
sv:Sc/PatientShieldFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/PatientShieldFluence_alpha/Ebins = 161
d:Sc/PatientShieldFluence_alpha/EBinMin =  10000 eV
d:Sc/PatientShieldFluence_alpha/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_alpha/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_alpha/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_alpha/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/PatientAssemblyFluence_alpha/Ebins = 161
d:Sc/PatientAssemblyFluence_alpha/EBinMin =  10000 eV
d:Sc/PatientAssemblyFluence_alpha/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_alpha/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_alpha/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_alpha/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_alpha/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/Wirechamberwindow1Fluence_alpha/Ebins = 161
d:Sc/Wirechamberwindow1Fluence_alpha/EBinMin =  10000 eV
d:Sc/Wirechamberwindow1Fluence_alpha/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_alpha/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_alpha/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_alpha/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_alpha/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/Wirechamberwindow2Fluence_alpha/Ebins = 161
d:Sc/Wirechamberwindow2Fluence_alpha/EBinMin =  10000 eV
d:Sc/Wirechamberwindow2Fluence_alpha/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_alpha/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_alpha/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_alpha/Component= "MWC"
s:Sc/WirechamberMWCFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_alpha/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/WirechamberMWCFluence_alpha/Ebins = 161
d:Sc/WirechamberMWCFluence_alpha/EBinMin =  10000 eV
d:Sc/WirechamberMWCFluence_alpha/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_alpha/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_alpha/Quantity = "Fluence"
s:Sc/WCcontainerFluence_alpha/Component= "WC_Container"
s:Sc/WCcontainerFluence_alpha/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_alpha/OutputType = "CSV"
sv:Sc/WCcontainerFluence_alpha/OnlyIncludeParticlesNamed = 1 "alpha"
i:Sc/WCcontainerFluence_alpha/Ebins = 161
d:Sc/WCcontainerFluence_alpha/EBinMin =  10000 eV
d:Sc/WCcontainerFluence_alpha/EBinMax = 1000000000 eV


