#===============================================#
# Gamma fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_gamma/Quantity = "Fluence"
s:Sc/ExtWindowFluence_gamma/Component= "ExtWindow"
s:Sc/ExtWindowFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_gamma/OutputType = "CSV"
sv:Sc/ExtWindowFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/ExtWindowFluence_gamma/Ebins = 161
d:Sc/ExtWindowFluence_gamma/EBinMin =  10000 eV
d:Sc/ExtWindowFluence_gamma/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_gamma/Quantity = "Fluence"
s:Sc/PropellerFluence_gamma/Component= "Propeller"
s:Sc/PropellerFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_gamma/OutputType = "CSV"
sv:Sc/PropellerFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/PropellerFluence_gamma/Ebins = 161
d:Sc/PropellerFluence_gamma/EBinMin =  10000 eV
d:Sc/PropellerFluence_gamma/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_gamma/Quantity = "Fluence"
s:Sc/Collimator1Fluence_gamma/Component= "Collimator1"
s:Sc/Collimator1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_gamma/OutputType = "CSV"
sv:Sc/Collimator1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/Collimator1Fluence_gamma/Ebins = 161
d:Sc/Collimator1Fluence_gamma/EBinMin =  10000 eV
d:Sc/Collimator1Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_gamma/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Layer1Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Layer1Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Layer1Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_gamma/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring1Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring1Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring1Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_gamma/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring2Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring2Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring2Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_gamma/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring3Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring3Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring3Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_gamma/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring4Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring4Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring4Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_gamma/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring5Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring5Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring5Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_gamma/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring6Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring6Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring6Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_gamma/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Ring7Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Ring7Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Ring7Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_gamma/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Layer2Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Layer2Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Layer2Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_gamma/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber1Layer3Fluence_gamma/Ebins = 161
d:Sc/IonChamber1Layer3Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber1Layer3Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_gamma/Quantity = "Fluence"
s:Sc/Collimator2Fluence_gamma/Component= "Collimator2"
s:Sc/Collimator2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_gamma/OutputType = "CSV"
sv:Sc/Collimator2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/Collimator2Fluence_gamma/Ebins = 161
d:Sc/Collimator2Fluence_gamma/EBinMin =  10000 eV
d:Sc/Collimator2Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_gamma/Quantity = "Fluence"
s:Sc/Collimator3Fluence_gamma/Component= "Collimator3"
s:Sc/Collimator3Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_gamma/OutputType = "CSV"
sv:Sc/Collimator3Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/Collimator3Fluence_gamma/Ebins = 161
d:Sc/Collimator3Fluence_gamma/EBinMin =  10000 eV
d:Sc/Collimator3Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer1Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Layer1Fluence_gamma/Component= "IonChamber2/Layer1"
s:Sc/IonChamber2Layer1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer1Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Layer1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Layer1Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Layer1Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Layer1Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_gamma/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring1Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring1Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring1Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_gamma/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring2Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring2Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring2Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_gamma/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring3Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring3Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring3Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_gamma/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring4Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring4Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring4Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_gamma/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring5Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring5Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring5Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_gamma/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring6Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring6Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring6Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_gamma/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Ring7Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Ring7Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Ring7Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_gamma/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Layer2Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Layer2Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Layer2Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_gamma/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_gamma/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_gamma/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/IonChamber2Layer3Fluence_gamma/Ebins = 161
d:Sc/IonChamber2Layer3Fluence_gamma/EBinMin =  10000 eV
d:Sc/IonChamber2Layer3Fluence_gamma/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_gamma/Quantity = "Fluence"
s:Sc/PatientShieldFluence_gamma/Component= "PatientShield"
s:Sc/PatientShieldFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_gamma/OutputType = "CSV"
sv:Sc/PatientShieldFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/PatientShieldFluence_gamma/Ebins = 161
d:Sc/PatientShieldFluence_gamma/EBinMin =  10000 eV
d:Sc/PatientShieldFluence_gamma/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_gamma/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_gamma/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_gamma/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/PatientAssemblyFluence_gamma/Ebins = 161
d:Sc/PatientAssemblyFluence_gamma/EBinMin =  10000 eV
d:Sc/PatientAssemblyFluence_gamma/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_gamma/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_gamma/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_gamma/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_gamma/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/Wirechamberwindow1Fluence_gamma/Ebins = 161
d:Sc/Wirechamberwindow1Fluence_gamma/EBinMin =  10000 eV
d:Sc/Wirechamberwindow1Fluence_gamma/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_gamma/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_gamma/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_gamma/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_gamma/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/Wirechamberwindow2Fluence_gamma/Ebins = 161
d:Sc/Wirechamberwindow2Fluence_gamma/EBinMin =  10000 eV
d:Sc/Wirechamberwindow2Fluence_gamma/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_gamma/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_gamma/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_gamma/Component= "MWC"
s:Sc/WirechamberMWCFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_gamma/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/WirechamberMWCFluence_gamma/Ebins = 161
d:Sc/WirechamberMWCFluence_gamma/EBinMin =  10000 eV
d:Sc/WirechamberMWCFluence_gamma/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_gamma/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_gamma/Quantity = "Fluence"
s:Sc/WCcontainerFluence_gamma/Component= "WC_Container"
s:Sc/WCcontainerFluence_gamma/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_gamma/OutputType = "CSV"
sv:Sc/WCcontainerFluence_gamma/OnlyIncludeParticlesNamed = 1 "gamma"
i:Sc/WCcontainerFluence_gamma/Ebins = 161
d:Sc/WCcontainerFluence_gamma/EBinMin =  10000 eV
d:Sc/WCcontainerFluence_gamma/EBinMax = 1000000000 eV

