#===============================================#
# Helion fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_helion/Quantity = "Fluence"
s:Sc/ExtWindowFluence_helion/Component= "ExtWindow"
s:Sc/ExtWindowFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_helion/OutputType = "CSV"
sv:Sc/ExtWindowFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/ExtWindowFluence_helion/Ebins = 161
d:Sc/ExtWindowFluence_helion/EBinMin =  10000 eV
d:Sc/ExtWindowFluence_helion/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_helion/Quantity = "Fluence"
s:Sc/PropellerFluence_helion/Component= "Propeller"
s:Sc/PropellerFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_helion/OutputType = "CSV"
sv:Sc/PropellerFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/PropellerFluence_helion/Ebins = 161
d:Sc/PropellerFluence_helion/EBinMin =  10000 eV
d:Sc/PropellerFluence_helion/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_helion/Quantity = "Fluence"
s:Sc/Collimator1Fluence_helion/Component= "Collimator1"
s:Sc/Collimator1Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_helion/OutputType = "CSV"
sv:Sc/Collimator1Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/Collimator1Fluence_helion/Ebins = 161
d:Sc/Collimator1Fluence_helion/EBinMin =  10000 eV
d:Sc/Collimator1Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_helion/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Layer1Fluence_helion/Ebins = 161
d:Sc/IonChamber1Layer1Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Layer1Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_helion/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring1Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring1Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring1Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_helion/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring2Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring2Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_helion/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring3Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring3Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring3Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_helion/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring4Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring4Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring4Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_helion/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring5Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring5Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring5Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_helion/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring6Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring6Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring6Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_helion/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Ring7Fluence_helion/Ebins = 161
d:Sc/IonChamber1Ring7Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Ring7Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_helion/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Layer2Fluence_helion/Ebins = 161
d:Sc/IonChamber1Layer2Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Layer2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_helion/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber1Layer3Fluence_helion/Ebins = 161
d:Sc/IonChamber1Layer3Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber1Layer3Fluence_helion/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_helion/Quantity = "Fluence"
s:Sc/Collimator2Fluence_helion/Component= "Collimator2"
s:Sc/Collimator2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_helion/OutputType = "CSV"
sv:Sc/Collimator2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/Collimator2Fluence_helion/Ebins = 161
d:Sc/Collimator2Fluence_helion/EBinMin =  10000 eV
d:Sc/Collimator2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_helion/Quantity = "Fluence"
s:Sc/Collimator3Fluence_helion/Component= "Collimator3"
s:Sc/Collimator3Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_helion/OutputType = "CSV"
sv:Sc/Collimator3Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/Collimator3Fluence_helion/Ebins = 161
d:Sc/Collimator3Fluence_helion/EBinMin =  10000 eV
d:Sc/Collimator3Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Fluence_helion/Component= "IonChamber2"
s:Sc/IonChamber2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Fluence_helion/Ebins = 161
d:Sc/IonChamber2Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_helion/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring1Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring1Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring1Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_helion/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring2Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring2Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_helion/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring3Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring3Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring3Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_helion/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring4Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring4Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring4Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_helion/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring5Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring5Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring5Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_helion/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring6Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring6Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring6Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_helion/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Ring7Fluence_helion/Ebins = 161
d:Sc/IonChamber2Ring7Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Ring7Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_helion/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Layer2Fluence_helion/Ebins = 161
d:Sc/IonChamber2Layer2Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Layer2Fluence_helion/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_helion/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_helion/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_helion/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/IonChamber2Layer3Fluence_helion/Ebins = 161
d:Sc/IonChamber2Layer3Fluence_helion/EBinMin =  10000 eV
d:Sc/IonChamber2Layer3Fluence_helion/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_helion/Quantity = "Fluence"
s:Sc/PatientShieldFluence_helion/Component= "PatientShield"
s:Sc/PatientShieldFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_helion/OutputType = "CSV"
sv:Sc/PatientShieldFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/PatientShieldFluence_helion/Ebins = 161
d:Sc/PatientShieldFluence_helion/EBinMin =  10000 eV
d:Sc/PatientShieldFluence_helion/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_helion/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_helion/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_helion/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/PatientAssemblyFluence_helion/Ebins = 161
d:Sc/PatientAssemblyFluence_helion/EBinMin =  10000 eV
d:Sc/PatientAssemblyFluence_helion/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_helion/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_helion/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_helion/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_helion/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/Wirechamberwindow1Fluence_helion/Ebins = 161
d:Sc/Wirechamberwindow1Fluence_helion/EBinMin =  10000 eV
d:Sc/Wirechamberwindow1Fluence_helion/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_helion/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_helion/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_helion/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_helion/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/Wirechamberwindow2Fluence_helion/Ebins = 161
d:Sc/Wirechamberwindow2Fluence_helion/EBinMin =  10000 eV
d:Sc/Wirechamberwindow2Fluence_helion/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_helion/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_helion/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_helion/Component= "MWC"
s:Sc/WirechamberMWCFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_helion/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/WirechamberMWCFluence_helion/Ebins = 161
d:Sc/WirechamberMWCFluence_helion/EBinMin =  10000 eV
d:Sc/WirechamberMWCFluence_helion/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_helion/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_helion/Quantity = "Fluence"
s:Sc/WCcontainerFluence_helion/Component= "WC_Container"
s:Sc/WCcontainerFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_helion/OutputType = "CSV"
sv:Sc/WCcontainerFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/WCcontainerFluence_helion/Ebins = 161
d:Sc/WCcontainerFluence_helion/EBinMin =  10000 eV
d:Sc/WCcontainerFluence_helion/EBinMax = 1000000000 eV

s:Sc/WC_WaterFluence_helion/Quantity = "Fluence"
s:Sc/WC_WaterFluence_helion/Component= "WC_Water"
s:Sc/WC_WaterFluence_helion/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WC_WaterFluence_helion/OutputType = "CSV"
sv:Sc/WC_WaterFluence_helion/OnlyIncludeParticlesNamed = 1 "He3"
i:Sc/WC_WaterFluence_helion/Ebins = 161
d:Sc/WC_WaterFluence_helion/EBinMin =  10000 eV
d:Sc/WC_WaterFluence_helion/EBinMax = 1000000000 eV
