#===============================================#
# Neutron fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_neutron/Quantity = "Fluence"
s:Sc/ExtWindowFluence_neutron/Component= "ExtWindow"
s:Sc/ExtWindowFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_neutron/OutputType = "CSV"
sv:Sc/ExtWindowFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/ExtWindowFluence_neutron/ebins = 708
d:Sc/ExtWindowFluence_neutron/EBinMin =  0.00001 eV
d:Sc/ExtWindowFluence_neutron/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_neutron/Quantity = "Fluence"
s:Sc/PropellerFluence_neutron/Component= "Propeller"
s:Sc/PropellerFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_neutron/OutputType = "CSV"
sv:Sc/PropellerFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/PropellerFluence_neutron/ebins = 708
d:Sc/PropellerFluence_neutron/EBinMin =  0.00001 eV
d:Sc/PropellerFluence_neutron/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_neutron/Quantity = "Fluence"
s:Sc/Collimator1Fluence_neutron/Component= "Collimator1"
s:Sc/Collimator1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_neutron/OutputType = "CSV"
sv:Sc/Collimator1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/Collimator1Fluence_neutron/ebins = 708
d:Sc/Collimator1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/Collimator1Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_neutron/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Layer1Fluence_neutron/ebins = 708
d:Sc/IonChamber1Layer1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Layer1Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_neutron/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring1Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring1Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_neutron/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring2Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring2Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_neutron/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring3Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring3Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring3Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_neutron/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring4Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring4Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring4Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_neutron/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring5Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring5Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring5Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_neutron/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring6Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring6Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring6Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_neutron/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Ring7Fluence_neutron/ebins = 708
d:Sc/IonChamber1Ring7Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Ring7Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_neutron/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Layer2Fluence_neutron/ebins = 708
d:Sc/IonChamber1Layer2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Layer2Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_neutron/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber1Layer3Fluence_neutron/ebins = 708
d:Sc/IonChamber1Layer3Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber1Layer3Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_neutron/Quantity = "Fluence"
s:Sc/Collimator2Fluence_neutron/Component= "Collimator2"
s:Sc/Collimator2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_neutron/OutputType = "CSV"
sv:Sc/Collimator2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/Collimator2Fluence_neutron/ebins = 708
d:Sc/Collimator2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/Collimator2Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_neutron/Quantity = "Fluence"
s:Sc/Collimator3Fluence_neutron/Component= "Collimator3"
s:Sc/Collimator3Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_neutron/OutputType = "CSV"
sv:Sc/Collimator3Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/Collimator3Fluence_neutron/ebins = 708
d:Sc/Collimator3Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/Collimator3Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer1Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Layer1Fluence_neutron/Component= "IonChamber2/Layer1"
s:Sc/IonChamber2Layer1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer1Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Layer1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Layer1Fluence_neutron/ebins = 708
d:Sc/IonChamber2Layer1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Layer1Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_neutron/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring1Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring1Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_neutron/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring2Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring2Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_neutron/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring3Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring3Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring3Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_neutron/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring4Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring4Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring4Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_neutron/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring5Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring5Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring5Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_neutron/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring6Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring6Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring6Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_neutron/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Ring7Fluence_neutron/ebins = 708
d:Sc/IonChamber2Ring7Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Ring7Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_neutron/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Layer2Fluence_neutron/ebins = 708
d:Sc/IonChamber2Layer2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Layer2Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_neutron/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_neutron/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_neutron/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/IonChamber2Layer3Fluence_neutron/ebins = 708
d:Sc/IonChamber2Layer3Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/IonChamber2Layer3Fluence_neutron/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_neutron/Quantity = "Fluence"
s:Sc/PatientShieldFluence_neutron/Component= "PatientShield"
s:Sc/PatientShieldFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_neutron/OutputType = "CSV"
sv:Sc/PatientShieldFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/PatientShieldFluence_neutron/ebins = 708
d:Sc/PatientShieldFluence_neutron/EBinMin =  0.00001 eV
d:Sc/PatientShieldFluence_neutron/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_neutron/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_neutron/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_neutron/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/PatientAssemblyFluence_neutron/ebins = 708
d:Sc/PatientAssemblyFluence_neutron/EBinMin =  0.00001 eV
d:Sc/PatientAssemblyFluence_neutron/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_neutron/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_neutron/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_neutron/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_neutron/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/Wirechamberwindow1Fluence_neutron/ebins = 708
d:Sc/Wirechamberwindow1Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/Wirechamberwindow1Fluence_neutron/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_neutron/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_neutron/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_neutron/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_neutron/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/Wirechamberwindow2Fluence_neutron/ebins = 708
d:Sc/Wirechamberwindow2Fluence_neutron/EBinMin =  0.00001 eV
d:Sc/Wirechamberwindow2Fluence_neutron/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_neutron/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_neutron/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_neutron/Component= "MWC"
s:Sc/WirechamberMWCFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_neutron/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/WirechamberMWCFluence_neutron/ebins = 708
d:Sc/WirechamberMWCFluence_neutron/EBinMin =  0.00001 eV
d:Sc/WirechamberMWCFluence_neutron/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_neutron/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_neutron/Quantity = "Fluence"
s:Sc/WCcontainerFluence_neutron/Component= "WC_Container"
s:Sc/WCcontainerFluence_neutron/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_neutron/OutputType = "CSV"
sv:Sc/WCcontainerFluence_neutron/OnlyIncludeParticlesNamed = 1 "neutron"
i:Sc/WCcontainerFluence_neutron/ebins = 708
d:Sc/WCcontainerFluence_neutron/EBinMin =  0.00001 eV
d:Sc/WCcontainerFluence_neutron/EBinMax = 1000000000 eV
