#===============================================#
# Proton fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_proton/Quantity = "Fluence"
s:Sc/ExtWindowFluence_proton/Component= "ExtWindow"
s:Sc/ExtWindowFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_proton/OutputType = "CSV"
sv:Sc/ExtWindowFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/ExtWindowFluence_proton/Ebins = 161
d:Sc/ExtWindowFluence_proton/EBinMin =  10000 eV
d:Sc/ExtWindowFluence_proton/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_proton/Quantity = "Fluence"
s:Sc/PropellerFluence_proton/Component= "Propeller"
s:Sc/PropellerFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_proton/OutputType = "CSV"
sv:Sc/PropellerFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/PropellerFluence_proton/Ebins = 161
d:Sc/PropellerFluence_proton/EBinMin =  10000 eV
d:Sc/PropellerFluence_proton/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_proton/Quantity = "Fluence"
s:Sc/Collimator1Fluence_proton/Component= "Collimator1"
s:Sc/Collimator1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_proton/OutputType = "CSV"
sv:Sc/Collimator1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/Collimator1Fluence_proton/Ebins = 161
d:Sc/Collimator1Fluence_proton/EBinMin =  10000 eV
d:Sc/Collimator1Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_proton/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Layer1Fluence_proton/Ebins = 161
d:Sc/IonChamber1Layer1Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer1Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_proton/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring1Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring1Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring1Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_proton/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring2Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring2Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring2Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_proton/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring3Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring3Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring3Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_proton/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring4Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring4Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring4Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_proton/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring5Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring5Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring5Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_proton/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring6Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring6Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring6Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_proton/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Ring7Fluence_proton/Ebins = 161
d:Sc/IonChamber1Ring7Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring7Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_proton/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Layer2Fluence_proton/Ebins = 161
d:Sc/IonChamber1Layer2Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer2Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_proton/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber1Layer3Fluence_proton/Ebins = 161
d:Sc/IonChamber1Layer3Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer3Fluence_proton/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_proton/Quantity = "Fluence"
s:Sc/Collimator2Fluence_proton/Component= "Collimator2"
s:Sc/Collimator2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_proton/OutputType = "CSV"
sv:Sc/Collimator2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/Collimator2Fluence_proton/Ebins = 161
d:Sc/Collimator2Fluence_proton/EBinMin =  10000 eV
d:Sc/Collimator2Fluence_proton/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_proton/Quantity = "Fluence"
s:Sc/Collimator3Fluence_proton/Component= "Collimator3"
s:Sc/Collimator3Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_proton/OutputType = "CSV"
sv:Sc/Collimator3Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/Collimator3Fluence_proton/Ebins = 161
d:Sc/Collimator3Fluence_proton/EBinMin =  10000 eV
d:Sc/Collimator3Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer1Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Layer1Fluence_proton/Component= "IonChamber2/Layer1"
s:Sc/IonChamber2Layer1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer1Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Layer1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Layer1Fluence_proton/Ebins = 161
d:Sc/IonChamber2Layer1Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer1Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_proton/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring1Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring1Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring1Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_proton/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring2Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring2Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring2Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_proton/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring3Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring3Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring3Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_proton/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring4Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring4Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring4Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_proton/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring5Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring5Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring5Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_proton/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring6Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring6Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring6Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_proton/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Ring7Fluence_proton/Ebins = 161
d:Sc/IonChamber2Ring7Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring7Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_proton/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Layer2Fluence_proton/Ebins = 161
d:Sc/IonChamber2Layer2Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer2Fluence_proton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_proton/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_proton/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_proton/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/IonChamber2Layer3Fluence_proton/Ebins = 161
d:Sc/IonChamber2Layer3Fluence_proton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer3Fluence_proton/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_proton/Quantity = "Fluence"
s:Sc/PatientShieldFluence_proton/Component= "PatientShield"
s:Sc/PatientShieldFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_proton/OutputType = "CSV"
sv:Sc/PatientShieldFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/PatientShieldFluence_proton/Ebins = 161
d:Sc/PatientShieldFluence_proton/EBinMin =  10000 eV
d:Sc/PatientShieldFluence_proton/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_proton/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_proton/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_proton/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/PatientAssemblyFluence_proton/Ebins = 161
d:Sc/PatientAssemblyFluence_proton/EBinMin =  10000 eV
d:Sc/PatientAssemblyFluence_proton/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_proton/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_proton/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_proton/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_proton/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/Wirechamberwindow1Fluence_proton/Ebins = 161
d:Sc/Wirechamberwindow1Fluence_proton/EBinMin =  10000 eV
d:Sc/Wirechamberwindow1Fluence_proton/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_proton/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_proton/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_proton/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_proton/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/Wirechamberwindow2Fluence_proton/Ebins = 161
d:Sc/Wirechamberwindow2Fluence_proton/EBinMin =  10000 eV
d:Sc/Wirechamberwindow2Fluence_proton/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_proton/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_proton/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_proton/Component= "MWC"
s:Sc/WirechamberMWCFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_proton/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/WirechamberMWCFluence_proton/Ebins = 161
d:Sc/WirechamberMWCFluence_proton/EBinMin =  10000 eV
d:Sc/WirechamberMWCFluence_proton/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_proton/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_proton/Quantity = "Fluence"
s:Sc/WCcontainerFluence_proton/Component= "WC_Container"
s:Sc/WCcontainerFluence_proton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_proton/OutputType = "CSV"
sv:Sc/WCcontainerFluence_proton/OnlyIncludeParticlesNamed = 1 "proton"
i:Sc/WCcontainerFluence_proton/Ebins = 161
d:Sc/WCcontainerFluence_proton/EBinMin =  10000 eV
d:Sc/WCcontainerFluence_proton/EBinMax = 1000000000 eV

