#===============================================#
# Triton fluence for the entire geometry
#===============================================#

s:Sc/ExtWindowFluence_triton/Quantity = "Fluence"
s:Sc/ExtWindowFluence_triton/Component= "ExtWindow"
s:Sc/ExtWindowFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/ExtWindowFluence_triton/OutputType = "CSV"
sv:Sc/ExtWindowFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/ExtWindowFluence_triton/Ebins = 161
d:Sc/ExtWindowFluence_triton/EBinMin =  10000 eV
d:Sc/ExtWindowFluence_triton/EBinMax = 1000000000 eV

s:Sc/PropellerFluence_triton/Quantity = "Fluence"
s:Sc/PropellerFluence_triton/Component= "Propeller"
s:Sc/PropellerFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PropellerFluence_triton/OutputType = "CSV"
sv:Sc/PropellerFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/PropellerFluence_triton/Ebins = 161
d:Sc/PropellerFluence_triton/EBinMin =  10000 eV
d:Sc/PropellerFluence_triton/EBinMax = 1000000000 eV

s:Sc/Collimator1Fluence_triton/Quantity = "Fluence"
s:Sc/Collimator1Fluence_triton/Component= "Collimator1"
s:Sc/Collimator1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator1Fluence_triton/OutputType = "CSV"
sv:Sc/Collimator1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/Collimator1Fluence_triton/Ebins = 161
d:Sc/Collimator1Fluence_triton/EBinMin =  10000 eV
d:Sc/Collimator1Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer1Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Layer1Fluence_triton/Component= "IonChamber1/Layer1"
s:Sc/IonChamber1Layer1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer1Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Layer1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Layer1Fluence_triton/Ebins = 161
d:Sc/IonChamber1Layer1Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer1Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring1Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring1Fluence_triton/Component= "IonChamber1/Ring1"
s:Sc/IonChamber1Ring1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring1Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring1Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring1Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring1Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring2Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring2Fluence_triton/Component= "IonChamber1/Ring2"
s:Sc/IonChamber1Ring2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring2Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring2Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring2Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring2Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring3Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring3Fluence_triton/Component= "IonChamber1/Ring3"
s:Sc/IonChamber1Ring3Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring3Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring3Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring3Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring3Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring3Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring4Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring4Fluence_triton/Component= "IonChamber1/Ring4"
s:Sc/IonChamber1Ring4Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring4Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring4Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring4Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring4Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring4Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring5Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring5Fluence_triton/Component= "IonChamber1/Ring5"
s:Sc/IonChamber1Ring5Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring5Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring5Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring5Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring5Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring5Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring6Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring6Fluence_triton/Component= "IonChamber1/Ring6"
s:Sc/IonChamber1Ring6Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring6Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring6Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring6Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring6Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring6Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Ring7Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Ring7Fluence_triton/Component= "IonChamber1/Ring7"
s:Sc/IonChamber1Ring7Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Ring7Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Ring7Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Ring7Fluence_triton/Ebins = 161
d:Sc/IonChamber1Ring7Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Ring7Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer2Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Layer2Fluence_triton/Component= "IonChamber1/Layer2"
s:Sc/IonChamber1Layer2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer2Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Layer2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Layer2Fluence_triton/Ebins = 161
d:Sc/IonChamber1Layer2Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer2Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber1Layer3Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber1Layer3Fluence_triton/Component= "IonChamber1/Layer3"
s:Sc/IonChamber1Layer3Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber1Layer3Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber1Layer3Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber1Layer3Fluence_triton/Ebins = 161
d:Sc/IonChamber1Layer3Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber1Layer3Fluence_triton/EBinMax = 1000000000 eV

s:Sc/Collimator2Fluence_triton/Quantity = "Fluence"
s:Sc/Collimator2Fluence_triton/Component= "Collimator2"
s:Sc/Collimator2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator2Fluence_triton/OutputType = "CSV"
sv:Sc/Collimator2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/Collimator2Fluence_triton/Ebins = 161
d:Sc/Collimator2Fluence_triton/EBinMin =  10000 eV
d:Sc/Collimator2Fluence_triton/EBinMax = 1000000000 eV

s:Sc/Collimator3Fluence_triton/Quantity = "Fluence"
s:Sc/Collimator3Fluence_triton/Component= "Collimator3"
s:Sc/Collimator3Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Collimator3Fluence_triton/OutputType = "CSV"
sv:Sc/Collimator3Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/Collimator3Fluence_triton/Ebins = 161
d:Sc/Collimator3Fluence_triton/EBinMin =  10000 eV
d:Sc/Collimator3Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer1Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Layer1Fluence_triton/Component= "IonChamber2/Layer1"
s:Sc/IonChamber2Layer1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer1Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Layer1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Layer1Fluence_triton/Ebins = 161
d:Sc/IonChamber2Layer1Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer1Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring1Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring1Fluence_triton/Component= "IonChamber2/Ring1"
s:Sc/IonChamber2Ring1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring1Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring1Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring1Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring1Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring2Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring2Fluence_triton/Component= "IonChamber2/Ring2"
s:Sc/IonChamber2Ring2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring2Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring2Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring2Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring2Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring3Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring3Fluence_triton/Component= "IonChamber2/Ring3"
s:Sc/IonChamber2Ring3Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring3Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring3Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring3Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring3Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring3Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring4Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring4Fluence_triton/Component= "IonChamber2/Ring4"
s:Sc/IonChamber2Ring4Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring4Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring4Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring4Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring4Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring4Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring5Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring5Fluence_triton/Component= "IonChamber2/Ring5"
s:Sc/IonChamber2Ring5Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring5Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring5Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring5Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring5Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring5Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring6Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring6Fluence_triton/Component= "IonChamber2/Ring6"
s:Sc/IonChamber2Ring6Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring6Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring6Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring6Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring6Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring6Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Ring7Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Ring7Fluence_triton/Component= "IonChamber2/Ring7"
s:Sc/IonChamber2Ring7Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Ring7Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Ring7Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Ring7Fluence_triton/Ebins = 161
d:Sc/IonChamber2Ring7Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Ring7Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer2Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Layer2Fluence_triton/Component= "IonChamber2/Layer2"
s:Sc/IonChamber2Layer2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer2Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Layer2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Layer2Fluence_triton/Ebins = 161
d:Sc/IonChamber2Layer2Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer2Fluence_triton/EBinMax = 1000000000 eV

s:Sc/IonChamber2Layer3Fluence_triton/Quantity = "Fluence"
s:Sc/IonChamber2Layer3Fluence_triton/Component= "IonChamber2/Layer3"
s:Sc/IonChamber2Layer3Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/IonChamber2Layer3Fluence_triton/OutputType = "CSV"
sv:Sc/IonChamber2Layer3Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/IonChamber2Layer3Fluence_triton/Ebins = 161
d:Sc/IonChamber2Layer3Fluence_triton/EBinMin =  10000 eV
d:Sc/IonChamber2Layer3Fluence_triton/EBinMax = 1000000000 eV

s:Sc/PatientShieldFluence_triton/Quantity = "Fluence"
s:Sc/PatientShieldFluence_triton/Component= "PatientShield"
s:Sc/PatientShieldFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientShieldFluence_triton/OutputType = "CSV"
sv:Sc/PatientShieldFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/PatientShieldFluence_triton/Ebins = 161
d:Sc/PatientShieldFluence_triton/EBinMin =  10000 eV
d:Sc/PatientShieldFluence_triton/EBinMax = 1000000000 eV

s:Sc/PatientAssemblyFluence_triton/Quantity = "Fluence"
s:Sc/PatientAssemblyFluence_triton/Component= "PatientAssembly"
s:Sc/PatientAssemblyFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/PatientAssemblyFluence_triton/OutputType = "CSV"
sv:Sc/PatientAssemblyFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/PatientAssemblyFluence_triton/Ebins = 161
d:Sc/PatientAssemblyFluence_triton/EBinMin =  10000 eV
d:Sc/PatientAssemblyFluence_triton/EBinMax = 1000000000 eV
b:Sc/PatientAssemblyFluence_triton/PropagateToChildren = "True"

s:Sc/Wirechamberwindow1Fluence_triton/Quantity = "Fluence"
s:Sc/Wirechamberwindow1Fluence_triton/Component= "WireChamber/Window1"
s:Sc/Wirechamberwindow1Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow1Fluence_triton/OutputType = "CSV"
sv:Sc/Wirechamberwindow1Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/Wirechamberwindow1Fluence_triton/Ebins = 161
d:Sc/Wirechamberwindow1Fluence_triton/EBinMin =  10000 eV
d:Sc/Wirechamberwindow1Fluence_triton/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow1Fluence_triton/PropagateToChildren = "True"

s:Sc/Wirechamberwindow2Fluence_triton/Quantity = "Fluence"
s:Sc/Wirechamberwindow2Fluence_triton/Component= "WireChamber/Window2"
s:Sc/Wirechamberwindow2Fluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/Wirechamberwindow2Fluence_triton/OutputType = "CSV"
sv:Sc/Wirechamberwindow2Fluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/Wirechamberwindow2Fluence_triton/Ebins = 161
d:Sc/Wirechamberwindow2Fluence_triton/EBinMin =  10000 eV
d:Sc/Wirechamberwindow2Fluence_triton/EBinMax = 1000000000 eV
b:Sc/Wirechamberwindow2Fluence_triton/PropagateToChildren = "True"

s:Sc/WirechamberMWCFluence_triton/Quantity = "Fluence"
s:Sc/WirechamberMWCFluence_triton/Component= "MWC"
s:Sc/WirechamberMWCFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WirechamberMWCFluence_triton/OutputType = "CSV"
sv:Sc/WirechamberMWCFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/WirechamberMWCFluence_triton/Ebins = 161
d:Sc/WirechamberMWCFluence_triton/EBinMin =  10000 eV
d:Sc/WirechamberMWCFluence_triton/EBinMax = 1000000000 eV
b:Sc/WirechamberMWCFluence_triton/PropagateToChildren = "True"

s:Sc/WCcontainerFluence_triton/Quantity = "Fluence"
s:Sc/WCcontainerFluence_triton/Component= "WC_Container"
s:Sc/WCcontainerFluence_triton/IfOutputFileAlreadyExists = "Overwrite" # "Exit", "Overwrite" or "Increment"
s:Sc/WCcontainerFluence_triton/OutputType = "CSV"
sv:Sc/WCcontainerFluence_triton/OnlyIncludeParticlesNamed = 1 "triton"
i:Sc/WCcontainerFluence_triton/Ebins = 161
d:Sc/WCcontainerFluence_triton/EBinMin =  10000 eV
d:Sc/WCcontainerFluence_triton/EBinMax = 1000000000 eV

